PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': '999', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['img/B01_00.jpg', 'img/B01_01.jpg', 'img/B01_02.jpg', 'img/B01_03.jpg', 'img/B01_04.jpg', 'img/B01_05.jpg', 'img/B01_06.jpg', 'img/B01_07.jpg', 'img/B01_08.jpg', 'img/B01_09.jpg', 'img/B01_10.jpg', 'img/B02_00.jpg', 'img/B02_01.jpg', 'img/B02_02.jpg', 'img/B02_03.jpg', 'img/B02_04.jpg', 'img/B02_05.jpg', 'img/B02_06.jpg', 'img/B02_07.jpg', 'img/B02_08.jpg', 'img/B02_09.jpg', 'img/B02_10.jpg', 'img/B03_00.jpg', 'img/B03_01.jpg', 'img/B03_02.jpg', 'img/B03_03.jpg', 'img/B03_04.jpg', 'img/B03_05.jpg', 'img/B03_06.jpg', 'img/B03_07.jpg', 'img/B03_08.jpg', 'img/B03_09.jpg', 'img/B03_10.jpg', 'img/B04_00.jpg', 'img/B04_01.jpg', 'img/B04_02.jpg', 'img/B04_03.jpg', 'img/B04_04.jpg', 'img/B04_05.jpg', 'img/B04_06.jpg', 'img/B04_07.jpg', 'img/B04_08.jpg', 'img/B04_09.jpg', 'img/B04_10.jpg', 'img/B05_00.jpg', 'img/B05_01.jpg', 'img/B05_02.jpg', 'img/B05_03.jpg', 'img/B05_04.jpg', 'img/B05_05.jpg', 'img/B05_06.jpg', 'img/B05_07.jpg', 'img/B05_08.jpg', 'img/B05_09.jpg', 'img/B05_10.jpg', 'img/B06_00.jpg', 'img/B06_01.jpg', 'img/B06_02.jpg', 'img/B06_03.jpg', 'img/B06_04.jpg', 'img/B06_05.jpg', 'img/B06_06.jpg', 'img/B06_07.jpg', 'img/B06_08.jpg', 'img/B06_09.jpg', 'img/B06_10.jpg', 'img/B07_00.jpg', 'img/B07_01.jpg', 'img/B07_02.jpg', 'img/B07_03.jpg', 'img/B07_04.jpg', 'img/B07_05.jpg', 'img/B07_06.jpg', 'img/B07_07.jpg', 'img/B07_08.jpg', 'img/B07_09.jpg', 'img/B07_10.jpg', 'img/B08_00.jpg', 'img/B08_01.jpg', 'img/B08_02.jpg', 'img/B08_03.jpg', 'img/B08_04.jpg', 'img/B08_05.jpg', 'img/B08_06.jpg', 'img/B08_07.jpg', 'img/B08_08.jpg', 'img/B08_09.jpg', 'img/B08_10.jpg', 'img/B09_00.jpg', 'img/B09_01.jpg', 'img/B09_02.jpg', 'img/B09_03.jpg', 'img/B09_04.jpg', 'img/B09_05.jpg', 'img/B09_06.jpg', 'img/B09_07.jpg', 'img/B09_08.jpg', 'img/B09_09.jpg', 'img/B09_10.jpg', 'img/B10_00.jpg', 'img/B10_01.jpg', 'img/B10_02.jpg', 'img/B10_03.jpg', 'img/B10_04.jpg', 'img/B10_05.jpg', 'img/B10_06.jpg', 'img/B10_07.jpg', 'img/B10_08.jpg', 'img/B10_09.jpg', 'img/B10_10.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = fluency
  exportHTML = on Save
  keyboardBackend = ioHub
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Routines
  Routine trial
    KeyboardComponent key_resp
      allowedKeys = 'd', 'k'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent respIndicator
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = 0.0000, 0.0000, 0.0000
      shape = rectangle
      size = (0.41,0.61)
      startVal [condition] = key_resp.keys
      stopVal [condition] = face_image.status==FINISHED
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    ImageComponent face_image
      image [set every repeat] = $face_file
      size = (0.4,0.6)
      startVal [time (s)] = 0.0
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    CodeComponent respCheck
      Code Type = Auto->JS
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      Begin Routine:
        redo = 0
      End Routine:
        keys = event.getKeys()
        if len(keys) > 0:
            if 'k' in keys or 'd' in keys:
                repeat_loop.finished = True
                redo = 0
            else:
                redo = 1
        else:
            redo = 1
    CodeComponent endTrial
      Code Type = Auto->JS
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      Each Frame:
        if t > 1.999:
            continueRoutine = False
  Routine fixation
    CodeComponent randDuration
      Code Type = Both
      Before JS Experiment:
        function randomIntFromInterval(min, max) { // min and max included
          return Math.floor(Math.random() * (max - min + 1) + min)
        }
      Begin JS Routine:
        //this function is defined in the "before experiment"
        //tab
        fixation_duration = randomIntFromInterval(1.4, 1.6);
      Begin Routine:
        fixation_duration = np.random.normal(1.5, 1)
    TextComponent fixCross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_duration
      text = +
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  Routine rating_scale
    SliderComponent attractiveness_slider
      forceEndRoutine = False
      granularity = 1
      labels = "1","2","3","4","5","6","7","8","9"
      letterHeight = 0.04
      pos = (0, -0.1)
      readOnly = True
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    TextComponent attractiveness_instr
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Using your keyboard, rate the attractiveness of the face you just saw on this scale from 1 (not attractive) to 9 (very attractive).
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    KeyboardComponent attrRating
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine redo_feedback
    TextComponent out_of_time_2
      letterHeight = 0.05
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      text:
        Oops, out of time! Remember to respond as soon as you see a face - you will need to re-try this trial.

        Press SPACE to try again.
    KeyboardComponent redo_keypress
      allowedKeys = 'space'
      forceEndRoutine = True
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    CodeComponent timeoutResume
      Code Type = Auto->JS
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      End Routine:
        event.getKeys()
  Routine specific_instr
    TextComponent specific_instructions
      letterHeight = 0.0425
      pos = (0, .15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr + ". A green frame around the image will show that your response was registered. Keep your eyes on the middle of the screen (as marked by the +) during the task. Press the SPACE BAR to begin when you are ready."
      wrapWidth = 1.5
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    TextComponent fixCross_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent spec_instr_adv
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent isInstrDone
      Code Type = Auto->JS
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      End Routine:
        instr_loop.finished = True
        event.getKeys()
    TextComponent definition
      letterHeight = 0.0425
      pos = (0,-0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $term
      wrapWidth = 1.5
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  Routine general_instr
    TextComponent genInstr
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Thank you for participating! This experiment has two parts:

        In the first half, you will complete a series of trials in which you will look at the middle of the screen and respond to a photo of a face as soon as it appears. The length of time before the face appears is random, so stay alert! After that, you will rate how attractive you found the face you just saw. By 'attractive', we do not mean in a sexual sense, but simply how pleasant the face was to see/

        In the second half, you will answer a series of questions about yourself. Your inputs in both halves of the experiment are fully confidential.

        Press the SPACE BAR to continue.
    KeyboardComponent instr_advance
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent condSelect
      Code Type = Auto->JS
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      Begin Experiment:
        #Use if-else flow to choose rows from the main
        #file. These rows should be python "lists".

        #I find the easiest way to use the participant number
        #for this purpose.
        #use the modulo operator (%) to cycle through

        #selected_rows = [1, 2, 3, 4, 5] #for testing
        #this line selects the condition based on the number of the participant
        #
        #selected_rows = range((expInfo['participant']%110)*2,(expInfo['participant']%110+1)*2)

        selected_rows = range((expInfo['participant']%8)*110,(expInfo['participant']%8+1)*110)
  Routine consent
    TextComponent consentText
      letterHeight = 0.02
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        This form will give you information about the study so you can decide about participating in the research. This study is an investigation of visual perception and categorization. The session will last between 20 and 60 minutes in total. You will receive compensation at a rate of 8 per hour for your time. If you are interested in learning more about this study, we will inform you of our hypotheses immediately after you complete the study. We will not contact you again after you complete the study, although you are free to contact us at any time if you have any additional questions or concerns, or if you would like to learn the outcome of this study.

        You can reach the principal investigator, Jeffrey Starns at jstarns@umass.edu or the Psychological and Brain Sciences Department Chair via Laura Wildman Hanlon at (413) 545-2387 or laurawh@umass.edu. If you have any questions concerning your rights as a research subject, you may contact the University of Massachusetts Amherst Human Research Protection Office (HRPO) at (413) 545-3428 or humansubjects@ora.umass.edu.

        PURPOSE: In this study, you will view a sequence of images (abstract shapes, objects, faces, or scenes) about which you will be asked to answer questions. The questions will relate either to perception (e.g., "Is this item part of group A or B?), or to your feelings about the item (e.g., "How attractive is the item?"). Your responses will be made by using your computer keyboard. The material will be either abstract shapes with no particular meaning, or everyday objects, faces, or scenes that are not offensive or provocative. You may also be asked to fill out short questionnaires after the main task. The questionnaires will consist of series of statements to which you will rate your agreement to on a numbered scale. The statements will not be offensive in nature.

        We are not interested in how you perform individually, but whether people in general are able to visually identify or discriminate the images presented more effectively in some conditions than in others. The pattern of results will allow us to determine the processes that people use to identify and discriminate between objects, faces and scenes, and how they respond to them afterwards.
        RISKS: There are no expected risks to this study beyond the potential that you may become tired and/or bored with the task. To reduce the possibility that this will occur, the task will be self-paced (you may take breaks when needed). Loss of confidentiality is a risk (i.e., someone may inadvertently gain access to our records).

        At the conclusion of this study, we may publish the results of this study in a scientific journal. Information will be presented in summary format and you will not be identified in any publications or presentations (in fact, we will no longer be able to determine which data files is yours). The data files containing your keyboard responses will be kept for a minimum of 6 years beyond publication of this study. After publication, we may share your data files with other researchers who may wish to re-analyze the results. However, there will no longer be any record of your identity at that time. This disclosure of the data is purely for scientific purposes.

        BENEFITS: You may not directly benefit from this research; however, we hope that your participation will provide some educational benefit by experiencing the nature of behavioral research on visual perception and categorization. For this reason, we encourage you to speak with the researcher after conclusion of your participation so that you can learn more about the design and hypotheses of this study. In addition, these results may benefit society in a number of ways, such as by increasing our understanding of how the process of categorization affects the perception of objects.

        PARTICIPATION: Your participation in the experiment is voluntary and you can withdraw at any time without penalty. You will still get payment for the time you have spent participating. You do not have to be in this study if you do not want to. If you agree to be in the study, but later change your mind, you may drop out at any time. There are no penalties or consequences of any kind if you decide that you do not want to participate. If you decide to withdraw during today's session, you will still receive 2 dollars per 15 minutes of participation, rounded up to the nearest 15 minutes.

        SUBJECT STATEMENT OF CONSENT: By clicking “I agree” I am indicating that I am eligible for this study and am agreeing to voluntarily enter this study. I have had a chance to read this consent form, and it was explained to me in a language which I use and understand. I understand that I can withdraw at any time.
    TextComponent iAgree
      letterHeight = 0.05
      pos = (0, -0.425)
      startVal [time (s)] = 0.0
      text = I Agree
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    MouseComponent consentClick
      clickable = iAgree
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine cont
    TextComponent contPrompt
      letterHeight = 0.045
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Well done! Remember:
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    TextComponent fixCross_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    TextComponent reminder
      letterHeight = 0.045
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr + ". Look at the middle of the screen and press the SPACE BAR to move onto the next trial."
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    KeyboardComponent contResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro2Questions
    TextComponent qsIntro
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Good work! You have finished the first part of the study. Now you need to answers a set of questions for us; please do your best to do so honestly.

        Press the SPACE BAR to continue when you are ready.
    KeyboardComponent contResp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine hello
    TextComponent welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Welcome to the study! Please make sure you are in a quiet environment where you will be able to concentrate on the task. Before we begin, you must review the consent form on the following screen.

        Press the SPACE BAR whenever you are ready.
    KeyboardComponent welc_advance
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine bye
    TextComponent exitMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thanks again for participating in the study! You can now exit this routine by pressing the TAB KEY.
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    KeyboardComponent exitKey
      allowedKeys = 'tab'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ambiguity2
    TextComponent qsInstr_2
      letterHeight = 0.03
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text =  Please rate your agreement with the following statement on a scale from 1 (Strongly Disagree) to 7 (Strongly Agree)
      wrapWidth = 1.5
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    TextComponent questions2
      letterHeight = 0.025
      pos = (0, 0.01)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        9. I would like to live in a foreign country for a while


        10. People who fit their lives to a schedule probably miss most of the joy of living


        11. It is more fun to tackle a complicated problem than to solve a simple one


        12. Often the most interesting and stimulating people are those who don't mind being different and original


        13. People who insist upon a yes or no answer just don't know how complicated things really are


        14. Many of our most important decisions are based upon insufficient information


        15. Teachers or supervisors who hand out vague assignments give a chance for one to show initiative and originality


        16. A good teacher is one who makes you wonder about your way of looking at things
    SliderComponent respQ9
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, 0.2675)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent respQ10
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, 0.185)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent respQ11
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, 0.11)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent respQ12
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, 0.0285)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent respQ13
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, -0.055)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent respQ14
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, -0.145)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent respQ15
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, -0.225)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent respQ16
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, -0.315)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent nextButton2
      letterHeight = 0.05
      pos = (0, -0.375)
      startVal [condition] = respQ9.rating and respQ10.rating and respQ11.rating and respQ12.rating and respQ13.rating and respQ14.rating and respQ15.rating and respQ16.rating
      text = NEXT
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    MouseComponent nextClick2
      clickable = nextButton2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent leftText2
      Code Type = Auto->JS
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      Begin Routine:
        questions2.alignText='left'
        questions2.alignHoriz = 'left'
  Routine ambiguity1
    TextComponent qsInstr
      letterHeight = 0.03
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text =  Please rate your agreement with the following statement on a scale from 1 (Strongly Disagree) to 7 (Strongly Agree)
      wrapWidth = 1.5
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    TextComponent questions1
      letterHeight = 0.025
      pos = (0, 0.01)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        1. An expert who doesn't come up with a definite answer probably doesn't know too much


        2. There is really no such thing as a problem that can't be solved


        3. A good job is one where what is to be done and how it is to be done are always clear.


        4. In the long run it is possible to get more done by tackling small, simple problems rather than large and complicated ones


        5. What we are used to is always preferable to what is unfamiliar


        6. A person who leads an even, regular life in which few surprises or unexpected happenings really has a lot to be grateful for


        7. I like parties where I know most of the people more than ones where all or most of the people are complete strangers


        8. The sooner we all acquire similar values and ideals the better.
    SliderComponent respQ1
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, 0.2675)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent respQ2
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, 0.185)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent respQ3
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, 0.11)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent respQ4
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, 0.0285)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent respQ5
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, -0.055)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent respQ6
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, -0.145)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent respQ7
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, -0.225)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent respQ8
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0, -0.315)
      size = (0.9, 0.015)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent nextButton1
      letterHeight = 0.05
      pos = (0, -0.375)
      startVal [condition] = respQ1.rating and respQ2.rating and respQ3.rating and respQ4.rating and respQ5.rating and respQ6.rating and respQ7.rating and respQ8.rating
      text = NEXT
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    MouseComponent nextClick1
      clickable = nextButton1
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent leftText1
      Code Type = Auto->JS
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      Begin Routine:
        questions1.alignText='left'
        questions1.alignHoriz = 'left'
  Routine test
    CodeComponent leftText_3
      Code Type = Auto->JS
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      Begin Routine:
        text.alignHoriz = 'left'
    TextComponent text
      letterHeight = 0.021
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      wrapWidth = 1.5
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      text:
        1. An expert who doesn't come up with a definite answer probably doesn't know too much



        2. There is really no such thing as a problem that can't be solved.



        3. A good job is one where what is to be done and how it is to be done are always clear.



        4. In the long run it is possible to get more done by tackling small, simple problems rather than large and complicated ones



        5. What we are used to is always preferable to what is unfamiliar



        6. A person who leads an even, regular life in which few surprises or unexpected happenings really has a lot to be grateful for



        7. I like parties where I know most of the people more than ones where all or most of the people are complete strangers



        8. The sooner we all acquire similar values and ideals the better.
Flow
  Routine hello
  Routine consent
  Routine general_instr
  LoopInitiator instr_loop loopType="TrialHandler"
    Selected rows = $selected_rows
    conditionsFile = fluency_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'steps': 0, 'fams': 1, 'face_file': 'img/B01_00.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'def': ' ', 'key_map': 'DK'},
      {'steps': 1, 'fams': 1, 'face_file': 'img/B01_01.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'def': ' ', 'key_map': 'DK'},
      {'steps': 2, 'fams': 1, 'face_file': 'img/B01_02.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'def': ' ', 'key_map': 'DK'},
      {'steps': 3, 'fams': 1, 'face_file': 'img/B01_03.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'def': ' ', 'key_map': 'DK'},
      {'steps': 4, 'fams': 1, 'face_file': 'img/B01_04.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'def': ' ', 'key_map': 'DK'},
      {'steps': 5, 'fams': 1, 'face_file': 'img/B01_05.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'def': ' ', 'key_map': 'DK'},
      {'steps': 6, 'fams': 1, 'face_file': 'img/B01_06.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'def': ' ', 'key_map': 'DK'},
      {'steps': 7, 'fams': 1, 'face_file': 'img/B01_07.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'def': ' ', 'key_map': 'DK'},
      {'steps': 8, 'fams': 1, 'face_file': 'img/B01_08.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'def': ' ', 'key_map': 'DK'}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
    Routine specific_instr
  LoopTerminator instr_loop
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $selected_rows
    conditionsFile = fluency_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'steps': 0, 'fams': 1, 'face_file': 'img/B01_00.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'key_map': 'DK'},
      {'steps': 1, 'fams': 1, 'face_file': 'img/B01_01.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'key_map': 'DK'},
      {'steps': 2, 'fams': 1, 'face_file': 'img/B01_02.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'key_map': 'DK'},
      {'steps': 3, 'fams': 1, 'face_file': 'img/B01_03.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'key_map': 'DK'},
      {'steps': 4, 'fams': 1, 'face_file': 'img/B01_04.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'key_map': 'DK'},
      {'steps': 5, 'fams': 1, 'face_file': 'img/B01_05.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'key_map': 'DK'},
      {'steps': 6, 'fams': 1, 'face_file': 'img/B01_06.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'key_map': 'DK'},
      {'steps': 7, 'fams': 1, 'face_file': 'img/B01_07.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'key_map': 'DK'},
      {'steps': 8, 'fams': 1, 'face_file': 'img/B01_08.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'key_map': 'DK'},
      {'steps': 9, 'fams': 1, 'face_file': 'img/B01_09.jpg', 'cond': 'CONTROL', 'instr': 'Press D or K as soon as you see a face', 'key_map': 'DK'}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
    LoopInitiator repeat_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 99
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      Routine fixation
      Routine trial
      LoopInitiator redo_feedback_loop loopType="TrialHandler"
        loopType = sequential
        nReps = redo
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        Routine redo_feedback
      LoopTerminator redo_feedback_loop
    LoopTerminator repeat_loop
    Routine rating_scale
    Routine cont
  LoopTerminator trials
  Routine intro2Questions
  Routine ambiguity1
  Routine ambiguity2
  Routine bye
